// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)


// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "StandardGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 2)
// To allow for fast testing:
(ImagePyramidSchedule 4 4 4 2 2 2)


// ********** Transform

(FinalGridSpacingInPhysicalUnits 10.0 10.0 10.0)
(GridSpacingSchedule 2.0 1.0)
(HowToCombineTransforms "Compose")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 10 5)

(SP_A 20)
(SP_a 2000)
(SP_alpha 0.6)


// ********** Metric

(NumberOfHistogramBins 32)
(FixedKernelBSplineOrder 0)
(MovingKernelBSplineOrder 3)
(UseFastAndLowMemoryVersion "true")


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "true")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "false")
(WriteResultImage "false")
(ShowExactMetricValue "false")
(ErodeMask "false")
(UseDirectionCosines "true")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "Full")
(MaximumNumberOfSamplingAttempts 5)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

